CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder sub-folder|OneDrive - VUMC\Desktop\Input\TRPM7\TRPM7_TrainingSet
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):TRPM7
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:TRPM7
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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
    Select the input image:TRPM7
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:OrigGreen
    Name the primary objects to be identified:Epithelium
    Typical diameter of objects, in pixel units (Min,Max):5,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.008,1.0
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:OrigRed
    Name the primary objects to be identified:TRPM7
    Typical diameter of objects, in pixel units (Min,Max):5,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.016,1.0
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:Nuclei
    Select objects to measure:Epithelium
    Select objects to measure:TRPM7
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:7|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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredTotalNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:8|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
    Select the objects to filter:TRPM7
    Name the output objects:FilteredTotalTRPM7
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:25
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:9|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
    Select the objects to filter:Epithelium
    Name the output objects:FilteredTotalEpithelium
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:80
    Filter using a maximum measurement value?:No
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
ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:FilteredTotalEpithelium
    Name the output objects:ExpandEpi
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
MeasureImageAreaOccupied:[module_num:11|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:ExpandEpi
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
RelateObjects:[module_num:12|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enabled:False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
    Parent objects:FilteredTotalNuclei
    Child objects:FilteredTotalTRPM7
    Name the output object:RelateTRPM7
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None

MaskObjects:[module_num:13|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
    Select objects to be masked:FilteredTotalNuclei
    Name the masked objects:TumorNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ExpandEpi
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:14|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
    Select objects to be masked:FilteredTotalTRPM7
    Name the masked objects:TumorTRPM7
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ExpandEpi
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:15|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:ExpandEpi
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
CalculateMath:[module_num:16|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
    Name the output measurement:TumorTRPM7_CountPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_TumorTRPM7
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_TumorNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:17|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
    Name the output measurement:TumorTRPM7_CtPerMM2
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_TumorTRPM7
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_ExpandEpi
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:2425463.03
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - VUMC\\Desktop\\Output\\Aspirin_TRPM7
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_TumorNuclei,Image|Count_TumorTRPM7,Image|FileName_TRPM7,Image|AreaOccupied_AreaOccupied_ExpandEpi,Image|Math_TumorTRPM7_CountPercent,Image|Math_TumorTRPM7_CtPerMM2,TumorNuclei|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Aspirin
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:TRPM7.csv
    Use the object name for the file name?:No
